\Outputs

^LNP_Light = 1          \Left Cue Light Illumination
^RNP_Light = 2          \Right Cue Light Illumination
^LeftLever = 3            \Left Lever Extension
^RightLever = 4            \Right Lever Extension
^Ret_Sipper = 14         \Extension & Retraction of Sipper Pipette
^White_Noise = 8        \White Noise Generator

\Inputs

^LNP = 1                \Left Lever Response
^RNP = 2                \Right Lever Response
^Lick = 3               \Contact Lickometer Response

\Variables (Active - Left Lever; Inactive - Right Lever)

\A = Active FR Lever Counter    (Lever response when sipper retracted & Cue Light illuminated)
\B = Inactive FR Lever Counter  (Lever response when sipper retracted & Cue Light  illuminated)
\C = Active Ext Lever Counter   (Lever response during 10s sipper extension)
\D = Inactive Ext Lever Counter (Lever response during 10s sipper extension)
\E = Lick Onset Counter
\F = Lick Offset Counter
\G = Fixed Ratio Lever Tracker
\H = Sipper Extension Counter
\I
SEALED_ARRAY J = 5000     \Active FR Lever Timestamp Array
SEALED_ARRAY K = 5000     \Inactive FR Lever Timestamp Array
SEALED_ARRAY L = 5000     \Active Ext Lever Timestamp Array
SEALED_ARRAY M = 5000     \Inactive Ext Lever Timestamp Array
SEALED_ARRAY N = 5000     \Lick Onset Timestamp Array
SEALED_ARRAY O = 5000     \Lick Offset Timestamp Array
SEALED_ARRAY P = 5000     \Sipper Extension Timestamp Array
\Q
\R
\S
\T = Session Timer
\U
\V
\W
\X
\Y = Lickometer Tracker (Tracks discrete lick events)
\Z

S.S.1,

S1,

    0.01": OFF ^Ret_Sipper ---> S2 \Sipper retracts when session is loaded

S2,

    #START: ON ^White_Noise, ^LeftLever, ^RightLever, ^LNP_Light, ^RNP_Light ---> S3 \White noise begins and Cue Light illuminated upon session start

S3,

    #R^LNP: SET J(A) = T; ADD A, G; IF G = 5 [@EXT, @NOEXT] \Active FR NP counted and timestamped
                 @EXT: ON ^Ret_Sipper; OFF ^LNP_Light, ^RNP_Light; SET P(H) = T, G = 0; ADD H ---> S4 \Sipper extended upon FR5 completion, sipper extension counted and timestamped, Cue Light illumination ceased
                 @NOEXT: ---> SX

    #R^RNP: SET K(B) = T; ADD B ---> SX \Inactive FR NP counted and timestamped

S4,

    10": OFF ^Ret_Sipper; ON ^LNP_Light, ^RNP_Light ---> S3 \Sipper retracted and Cue Light re-illuminated

    #R^LNP: SET L(C) = T; ADD C ---> SX \Active Ext NP counted and timestamped
    #R^RNP: SET M(D) = T; ADD D ---> SX \Inactive Ext NP counted and timestamped

S.S.2,

S1,

    #START: ---> S2

S2,

    #R^Lick: ADD Y; IF Y >= 2 [@Lick, @NoLick] \Determines if discrete lick has been initiated
                 @Lick: Z1; SET Y = 0 ---> S3
                 @NoLick: ---> SX

    0.02": SET Y = 0 ---> S2

S3,

    0.02": Z2 ---> S2 \Determines if discrete lick has ended

    #R^Lick: ---> S3

S.S.3,

S1,

    #Z1: SET N(E) = T; ADD E---> S1 \Lick onset counted and timestamped

S.S.4,

S1,

    #Z2: SET O(F) = T; ADD F ---> SX \Lick offset counted and timestamped


S.S.5,

S1,

    #START ---> S2

S2,

    0.01": SET T = T + 0.01; SHOW 1, Active FP, A, 2, Inactive FP, B, 3, Active Ext, C, 4, Inactive Ext, D, 5, Lick Onset, E, 6, Lick Offset, F, 7, FR Tracker, G, 8, Sip Extensions, H, 9, Timer, T ---> SX \Displays updated variable values during session

S.S.6,

S1,

    #START ---> S2

S2,

    60' ---> STOPSAVE \Session ended after 60 minutes

